<mm:GetMdibResponse xmlns:p1="http://www.w3.org/2003/05/soap-envelope" xmlns:dpws="http://docs.oasis-open.org/ws-dd/ns/dpws/2009/01" xmlns:mm="http://standards.ieee.org/downloads/11073/11073-10207-2017/message" xmlns:wsa="http://www.w3.org/2005/08/addressing" xmlns:wse="http://schemas.xmlsoap.org/ws/2004/08/eventing" MdibVersion="115" SequenceId="urn:uuid:e739e01e-e072-4f64-9e9b-8e0112d02ba3">
	<mm:Mdib MdibVersion="1" SequenceId="urn:uuid:e739e01e-e072-4f64-9e9b-8e0112d02ba3" xmlns:p2="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"               xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension">
		<p2:MdDescription DescriptionVersion="0">
			<p2:Mds Handle="MDC_DEV_OR_TABLE_MDS">
				<p2:Sco Handle="MDC_DEV_OR_TABLE_PULS_SCO" DescriptorVersion="0" xsi:type="p2:ScoDescriptor">
					
					<p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_INCREASE_TABLE_HEIGHT_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_DEV_OR_TABLE_MDS" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
                            <ext:Extension/>
                            <p2:Type Code="196279">
                                <p2:ConceptDescription Lang="en-US">The activate function to increase the table height by one cm</p2:ConceptDescription>
                            </p2:Type>
          </p2:Operation>
          <p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_DECREASE_TABLE_HEIGHT_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_DEV_OR_TABLE_MDS" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">The activate function to decrease the table height by one cm</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>
          <p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_INCREASE_TREND_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_OR_TABLE_TREND" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">The activate function to increase the trend value by 0.5deg</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>
          <p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_DECREASE_TREND_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_OR_TABLE_TREND" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">The activate function to decrease the trend value by 0.5deg</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>
          <p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_INCREASE_TILT_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_OR_TABLE_TILT" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">The activate function to increase the tilt value by 0.5deg</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>
          <p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_DECREASE_TILT_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_OR_TABLE_TILT" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">The activate function to decrease the tilt value by 0.5deg</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>
          <p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_INCREASE_BACKPLATE_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_OR_TABLE_BACKPLATE" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">The activate function to increase the backplate value by 0.5deg</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>
          <p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_DECREASE_BACKPLATE_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_OR_TABLE_BACKPLATE" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">The activate function to decrease the backplate value by 0.5deg</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>

          <p2:Operation Handle="MDC_OR_TABLE_SETALERTSTATE_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_DEV_OR_TABLE_MDS" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:SetAlertStateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">The SetAlertState function for remote alarm handling</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>

          <p2:Operation Handle="MDC_OR_TABLE_SETSTRING_PREDEFINED_POSITIONS_SCO" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_DEV_OR_TABLE_MDS" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:SetStringOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">Set the predefined position function</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>
          <p2:Operation Handle="MDC_OR_TABLE_ACTIVATE_APPLY_PREDEFINED_POSITION" DescriptorVersion="0" SafetyClassification="MedC" OperationTarget="MDC_DEV_OR_TABLE_MDS" MaxTimeToFinish="P0Y0M0DT0H0M1.0S" Retriggerable="true" xsi:type="p2:ActivateOperationDescriptor">
            <ext:Extension/>
            <p2:Type Code="196279">
              <p2:ConceptDescription Lang="en-US">Applies the predefined position</p2:ConceptDescription>
            </p2:Type>
          </p2:Operation>



        </p2:Sco>
				<p2:Vmd Handle="MDC_DEV_OR_TABLE_VMD">
					<p2:AlertSystem Handle="MDC_DEV_OR_TABLE_ASYS" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
						<p2:AlertCondition Handle="MDC_DEV_OR_TABLE_HEIGHT_UPPER" Kind="Phy" Priority="Me" xsi:type="p2:LimitAlertConditionDescriptor">
							<p2:Source>MDC_OR_TABLE_HEIGHT</p2:Source>
							<p2:MaxLimits AbsoluteAccuracy="1" Lower="135" Upper="140"/>
						</p2:AlertCondition>
            <p2:AlertCondition Handle="MDC_DEV_OR_TABLE_HEIGHT_LOWER" Kind="Phy" Priority="Me" xsi:type="p2:LimitAlertConditionDescriptor">
              <p2:Source>MDC_OR_TABLE_HEIGHT</p2:Source>
              <p2:MaxLimits AbsoluteAccuracy="1" Lower="60" Upper="65"/>
            </p2:AlertCondition>

            <p2:AlertCondition Handle="MDC_DEV_OR_TABLE_TREND_UPPER" Kind="Phy" Priority="Me" xsi:type="p2:LimitAlertConditionDescriptor">
              <p2:Source>MDC_OR_TABLE_HEIGHT</p2:Source>
              <p2:MaxLimits AbsoluteAccuracy="1" Lower="40" Upper="45"/>
            </p2:AlertCondition>
            <p2:AlertCondition Handle="MDC_DEV_OR_TABLE_TREND_LOWER" Kind="Phy" Priority="Me" xsi:type="p2:LimitAlertConditionDescriptor">
              <p2:Source>MDC_OR_TABLE_HEIGHT</p2:Source>
              <p2:MaxLimits AbsoluteAccuracy="1" Lower="-45" Upper="-40"/>
            </p2:AlertCondition>

            <p2:AlertCondition Handle="MDC_DEV_OR_TABLE_TILT_UPPER" Kind="Phy" Priority="Me" xsi:type="p2:LimitAlertConditionDescriptor">
              <p2:Source>MDC_OR_TABLE_HEIGHT</p2:Source>
              <p2:MaxLimits AbsoluteAccuracy="1" Lower="20" Upper="25"/>
            </p2:AlertCondition>
            <p2:AlertCondition Handle="MDC_DEV_OR_TABLE_TILT_LOWER" Kind="Phy" Priority="Me" xsi:type="p2:LimitAlertConditionDescriptor">
              <p2:Source>MDC_OR_TABLE_HEIGHT</p2:Source>
              <p2:MaxLimits AbsoluteAccuracy="1" Lower="-25" Upper="-20"/>
            </p2:AlertCondition>

            <p2:AlertCondition Handle="MDC_DEV_OR_TABLE_BACKPLATE_UPPER" Kind="Phy" Priority="Me" xsi:type="p2:LimitAlertConditionDescriptor">
              <p2:Source>MDC_OR_TABLE_HEIGHT</p2:Source>
              <p2:MaxLimits AbsoluteAccuracy="1" Lower="-40" Upper="-35"/>
            </p2:AlertCondition>
            <p2:AlertCondition Handle="MDC_DEV_OR_TABLE_BACKPLATE_LOWER" Kind="Phy" Priority="Me" xsi:type="p2:LimitAlertConditionDescriptor">
              <p2:Source>MDC_OR_TABLE_HEIGHT</p2:Source>
              <p2:MaxLimits AbsoluteAccuracy="1" Lower="75" Upper="80"/>
            </p2:AlertCondition>


            <p2:AlertSignal ConditionSignaled="MDC_DEV_OR_TABLE_HEIGHT_UPPER" Handle="MDC_DEV_OR_TABLE_HEIGHT_UPPER_SIGNAL" Latching="false" Manifestation="Aud"/>
            <p2:AlertSignal ConditionSignaled="MDC_DEV_OR_TABLE_HEIGHT_LOWER" Handle="MDC_DEV_OR_TABLE_HEIGHT_LOWER_SIGNAL" Latching="false" Manifestation="Aud"/>
            <p2:AlertSignal ConditionSignaled="MDC_DEV_OR_TABLE_TREND_UPPER" Handle="MDC_DEV_OR_TABLE_TREND_UPPER_SIGNAL" Latching="false" Manifestation="Aud"/>
            <p2:AlertSignal ConditionSignaled="MDC_DEV_OR_TABLE_TREND_LOWER" Handle="MDC_DEV_OR_TABLE_TREND_LOWER_SIGNAL" Latching="false" Manifestation="Aud"/>
            <p2:AlertSignal ConditionSignaled="MDC_DEV_OR_TABLE_TILT_UPPER" Handle="MDC_DEV_OR_TABLE_TILT_UPPER_SIGNAL" Latching="false" Manifestation="Aud"/>
            <p2:AlertSignal ConditionSignaled="MDC_DEV_OR_TABLE_TILT_LOWER" Handle="MDC_DEV_OR_TABLE_TILT_LOWER_SIGNAL" Latching="false" Manifestation="Aud"/>
            <p2:AlertSignal ConditionSignaled="MDC_DEV_OR_TABLE_BACKPLATE_UPPER" Handle="MDC_DEV_OR_TABLE_BACKPLATE_UPPER_SIGNAL" Latching="false" Manifestation="Aud"/>
            <p2:AlertSignal ConditionSignaled="MDC_DEV_OR_TABLE_BACKPLATE_LOWER" Handle="MDC_DEV_OR_TABLE_BACKPLATE_LOWER_SIGNAL" Latching="false" Manifestation="Aud"/>


            <!--TODO: add otherrs-->


          </p2:AlertSystem>
					<p2:Channel Handle="MDC_DEV_OR_TABLE_POSITION" SafetyClassification="MedB">
						<p2:Metric Handle="MDC_OR_TABLE_HEIGHT" MetricAvailability="Cont" MetricCategory="Msrmt" Resolution="1" xsi:type="p2:NumericMetricDescriptor">
							<p2:Unit Code="MDC_DIM_CENTI_M"/>
							<p2:TechnicalRange AbsoluteAccuracy="2" Lower="60" RelativeAccuracy="2" Upper="140"/>
						</p2:Metric>
            
            <p2:Metric Handle="MDC_OR_TABLE_TREND" MetricAvailability="Cont" MetricCategory="Msrmt" Resolution="0.1" xsi:type="p2:NumericMetricDescriptor">
              <p2:Unit Code="MDC_DIM_ANG_DEG"/>
              <p2:TechnicalRange AbsoluteAccuracy="0.1" Lower="-45" RelativeAccuracy="0.1" Upper="45"/>
            </p2:Metric>

            <p2:Metric Handle="MDC_OR_TABLE_TILT" MetricAvailability="Cont" MetricCategory="Msrmt" Resolution="0.1" xsi:type="p2:NumericMetricDescriptor">
              <p2:Unit Code="MDC_DIM_ANG_DEG"/>
              <p2:TechnicalRange AbsoluteAccuracy="0.1" Lower="-25" RelativeAccuracy="0.1" Upper="25"/>
            </p2:Metric>

            <p2:Metric Handle="MDC_OR_TABLE_BACKPLATE" MetricAvailability="Cont" MetricCategory="Msrmt" Resolution="0.1" xsi:type="p2:NumericMetricDescriptor">
              <p2:Unit Code="MDC_DIM_ANG_DEG"/>
              <p2:TechnicalRange AbsoluteAccuracy="0.1" Lower="-40" RelativeAccuracy="0.1" Upper="80"/>
            </p2:Metric>
	
          </p2:Channel>

          <p2:Channel Handle="MDC_DEV_OR_TABLE_CH_PREDEFINED_POSITION" SafetyClassification="MedB">
            <p2:Metric Handle="MDC_DEV_OR_TABLE_PREDEFINED_POSITION" DescriptorVersion="0" SafetyClassification="MedA" MetricCategory="Set" MetricAvailability="Intr" xsi:type="p2:EnumStringMetricDescriptor">
              <p2:Type Code="196175">
                <p2:ConceptDescription Lang="en-US">Predefined positionc</p2:ConceptDescription>
              </p2:Type>
              <p2:Unit Code="262656">
                <p2:ConceptDescription Lang="en-US">no unit</p2:ConceptDescription>
              </p2:Unit>
              <p2:AllowedValue>
                <p2:Value>BeachChair</p2:Value>
              </p2:AllowedValue>
              <p2:AllowedValue>
                <p2:Value>NullLevel</p2:Value>
              </p2:AllowedValue>
            </p2:Metric>

          </p2:Channel>
          
				</p2:Vmd>
			</p2:Mds>
		</p2:MdDescription>
		<p2:MdState StateVersion="115" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

		<p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_HEIGHT_UPPER" MonitoredAlertLimits="All" StateVersion="0" xsi:type="p2:LimitAlertConditionState">
				<p2:Limits AbsoluteAccuracy="1" Lower="135" Upper="140"/>
			</p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_HEIGHT_LOWER" MonitoredAlertLimits="All" StateVersion="0" xsi:type="p2:LimitAlertConditionState">
        <p2:Limits AbsoluteAccuracy="1" Lower="60" Upper="65"/>
      </p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_TREND_UPPER" MonitoredAlertLimits="All" StateVersion="0" xsi:type="p2:LimitAlertConditionState">
        <p2:Limits AbsoluteAccuracy="1" Lower="40" Upper="45"/>
      </p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_TREND_LOWER" MonitoredAlertLimits="All" StateVersion="0" xsi:type="p2:LimitAlertConditionState">
        <p2:Limits AbsoluteAccuracy="1" Lower="-45" Upper="-40"/>
      </p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_TILT_UPPER" MonitoredAlertLimits="All" StateVersion="0" xsi:type="p2:LimitAlertConditionState">
        <p2:Limits AbsoluteAccuracy="1" Lower="20" Upper="25"/>
      </p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_TILT_LOWER" MonitoredAlertLimits="All" StateVersion="0" xsi:type="p2:LimitAlertConditionState">
        <p2:Limits AbsoluteAccuracy="1" Lower="-25" Upper="-20"/>
      </p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_BACKPLATE_UPPER" MonitoredAlertLimits="All" StateVersion="0" xsi:type="p2:LimitAlertConditionState">
        <p2:Limits AbsoluteAccuracy="1" Lower="75" Upper="80"/>
      </p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_BACKPLATE_LOWER" MonitoredAlertLimits="All" StateVersion="0" xsi:type="p2:LimitAlertConditionState">
        <p2:Limits AbsoluteAccuracy="1" Lower="-40" Upper="-35"/>
      </p2:State>


      <p2:State xsi:type="p2:AlertSignalState" DescriptorVersion="0" StateVersion="0" ActivationState="On" Presence="Off" DescriptorHandle="MDC_DEV_OR_TABLE_HEIGHT_UPPER_SIGNAL"/>
      <p2:State xsi:type="p2:AlertSignalState" DescriptorVersion="0" StateVersion="0" ActivationState="On" Presence="Off" DescriptorHandle="MDC_DEV_OR_TABLE_HEIGHT_LOWER_SIGNAL"/>
      <p2:State xsi:type="p2:AlertSignalState" DescriptorVersion="0" StateVersion="0" ActivationState="On" Presence="Off" DescriptorHandle="MDC_DEV_OR_TABLE_TREND_UPPER_SIGNAL"/>
      <p2:State xsi:type="p2:AlertSignalState" DescriptorVersion="0" StateVersion="0" ActivationState="On" Presence="Off" DescriptorHandle="MDC_DEV_OR_TABLE_TREND_LOWER_SIGNAL"/>
      <p2:State xsi:type="p2:AlertSignalState" DescriptorVersion="0" StateVersion="0" ActivationState="On" Presence="Off" DescriptorHandle="MDC_DEV_OR_TABLE_TILT_UPPER_SIGNAL"/>
      <p2:State xsi:type="p2:AlertSignalState" DescriptorVersion="0" StateVersion="0" ActivationState="On" Presence="Off" DescriptorHandle="MDC_DEV_OR_TABLE_TILT_LOWER_SIGNAL"/>
      <p2:State xsi:type="p2:AlertSignalState" DescriptorVersion="0" StateVersion="0" ActivationState="On" Presence="Off" DescriptorHandle="MDC_DEV_OR_TABLE_BACKPLATE_UPPER_SIGNAL"/>
      <p2:State xsi:type="p2:AlertSignalState" DescriptorVersion="0" StateVersion="0" ActivationState="On" Presence="Off" DescriptorHandle="MDC_DEV_OR_TABLE_BACKPLATE_LOWER_SIGNAL"/>

      <p2:State xsi:type="p2:AlertSystemState" DescriptorVersion="0" StateVersion="0" ActivationState="On" LastSelfCheck="1579170441478" SelfCheckCount="0" PresentPhysiologicalAlarmConditions="" PresentTechnicalAlarmConditions="" DescriptorHandle="MDC_DEV_OR_TABLE_ASYS"/>
      <p2:State ActivationState="On" DescriptorHandle="MDC_OR_TABLE_HEIGHT" StateVersion="0" xsi:type="p2:NumericMetricState">
				<p2:MetricValue DeterminationTime="0" Value="80">
					<p2:MetricQuality Validity="Vld"/>
				</p2:MetricValue>
			</p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_OR_TABLE_TREND" StateVersion="0" xsi:type="p2:NumericMetricState">
        <p2:MetricValue DeterminationTime="0" Value="0">
          <p2:MetricQuality Validity="Vld"/>
        </p2:MetricValue>
      </p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_OR_TABLE_TILT" StateVersion="0" xsi:type="p2:NumericMetricState">
        <p2:MetricValue DeterminationTime="0" Value="0">
          <p2:MetricQuality Validity="Vld"/>
        </p2:MetricValue>
      </p2:State>
      <p2:State ActivationState="On" DescriptorHandle="MDC_OR_TABLE_BACKPLATE" StateVersion="0" xsi:type="p2:NumericMetricState">
        <p2:MetricValue DeterminationTime="0" Value="0">
          <p2:MetricQuality Validity="Vld"/>
        </p2:MetricValue>
      </p2:State>
      <p2:State xsi:type="p2:EnumStringMetricState" DescriptorHandle="MDC_DEV_OR_TABLE_PREDEFINED_POSITION" DescriptorVersion="0" StateVersion="0">
        <p2:MetricValue Value="NullLevel">
          <p2:MetricQuality Validity="Vld"/>
        </p2:MetricValue>
      </p2:State>

      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_MDS" StateVersion="0" xsi:type="p2:MdsState"/>
			<p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_VMD" StateVersion="0" xsi:type="p2:VmdState"/>
			<p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_POSITION" StateVersion="0" xsi:type="p2:ChannelState"/>
      <p2:State ActivationState="On" DescriptorHandle="MDC_DEV_OR_TABLE_CH_PREDEFINED_POSITION" StateVersion="0" xsi:type="p2:ChannelState"/>

      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_INCREASE_TABLE_HEIGHT_SCO"/>
      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_DECREASE_TABLE_HEIGHT_SCO"/>
      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_INCREASE_TREND_SCO"/>
      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_DECREASE_TREND_SCO"/>
      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_INCREASE_TILT_SCO"/>
      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_DECREASE_TILT_SCO"/>
      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_INCREASE_BACKPLATE_SCO"/>
      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_DECREASE_BACKPLATE_SCO"/>

      <p2:State xsi:type="p2:ActivateOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_ACTIVATE_APPLY_PREDEFINED_POSITION"/>
      <p2:State xsi:type="p2:SetStringOperationState" DescriptorVersion="0" StateVersion="0" OperatingMode="En" DescriptorHandle="MDC_OR_TABLE_SETSTRING_PREDEFINED_POSITIONS_SCO"/>

      

    </p2:MdState>
	</mm:Mdib>
</mm:GetMdibResponse>